CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['']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
    Select the input image:Original
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.01,0.1
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
ColorToGray:[module_num:6|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notes:['']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
    Select the input image:RescaleIntensity
    Conversion method:Split
    Image type:Channels
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    Channel count:1
    Channel number:1
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    Image name:ColorToGray

Threshold:[module_num:7|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notes:['']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
    Select the input image:ColorToGray
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.8
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Lower outlier fraction:0.03
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1.7
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
IdentifyPrimaryObjects:[module_num:8|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notes:['']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
    Select the input image:ColorToGray
    Name the primary objects to be identified:Microglia
    Typical diameter of objects, in pixel units (Min,Max):28,72
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.8
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Lower outlier fraction:0.03
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1.7
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
EditObjectsManually:[module_num:9|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notes:['']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
    Select the objects to be edited:Microglia
    Name the edited objects:Edited_MicrogliaS
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:ColorToGray
    Allow overlapping objects?:No

IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Edited_MicrogliaS
    Name the objects to be identified:MicrogliaProcesses
    Select the method to identify the secondary objects:Propagation
    Select the input image:ColorToGray
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    Regularization factor:0.00
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredMicrogliaS
    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.2
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:0.2
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
MeasureObjectIntensity:[module_num:11|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notes:['']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
    Select images to measure:Original
    Select objects to measure:MicrogliaProcesses

MeasureImageAreaOccupied:[module_num:12|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notes:['', '']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
    Measure the area occupied by:Both
    Select binary images to measure:Threshold
    Select object sets to measure:MicrogliaProcesses

MeasureObjectNeighbors:[module_num:13|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notes:['']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
    Select objects to measure:FilteredMicrogliaS
    Select neighboring objects to measure:FilteredMicrogliaS
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:MicrogliaProcesses
    Name the output image:MicrogliaProcesses_image
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:FilteredMicrogliaS
    Name the output image:FilteredMicrogliaS_image
    Select the color format:Color
    Select the colormap:Default

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:FilteredMicrogliaS
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:FilteredMicrogliaS_image
    Text color:red
    Name the output image that has the measurements displayed:FilteredMicrogliaS_ID
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:FilteredMicrogliaS
    Measurement to display:Neighbors_FirstClosestDistance_Expanded
    Select the image on which to display the measurements:FilteredMicrogliaS_image
    Text color:red
    Name the output image that has the measurements displayed:FirstClosestDistance_ID
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:normal

CalculateMath:[module_num:18|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notes:['']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
    Name the output measurement:Measurement_scaleum2
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_TotalArea_Threshold
    Multiply the above operand by:0.020449
    Raise the power of above operand by:1
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:19|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notes:['']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
    Name the output measurement:Measurement_scalemm2
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_Measurement_scaleum2
    Multiply the above operand by:0.000001
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:20|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notes:['']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
    Name the output measurement:Measurement_scaleum_neighbor
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:FilteredMicrogliaS
    Select the numerator measurement:Neighbors_FirstClosestDistance_Expanded
    Multiply the above operand by:0.143
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:21|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notes:['']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
    Name the output measurement:Measurement_Density_mm2
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_FilteredMicrogliaS
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_Measurement_scalemm2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:22|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notes:['']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
    Name the output measurement:Measurement_Density_um2
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_FilteredMicrogliaS
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_Measurement_scaleum2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:23|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notes:['']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
    Name the output measurement:Measurement_SpacingIndex
    Operation:Multiply
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_Measurement_Density_um2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:FilteredMicrogliaS
    Select the second operand measurement:Math_Measurement_scaleum_neighbor
    Multiply the above operand by:1.0
    Raise the power of above operand by:2.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:FilteredMicrogliaS_ID
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:FilteredMicrogliaS_ID
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:FirstClosestDistance_ID
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:FirstClosestDistance
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:Threshold
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Threshold
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:FinalResults
    Overwrite existing files without warning?:No
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