CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Blind
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Blind
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.01,0.1
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
ColorToGray:[module_num:6|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
    Select the input image:RescaleIntensity
    Conversion method:Split
    Image type:Channels
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    Channel count:1
    Channel number:1
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    Image name:IBA1

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:IBA1
    Name the primary objects to be identified:Microglia
    Typical diameter of objects, in pixel units (Min,Max):28,72
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.8
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Lower outlier fraction:0.03
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1.7
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
EditObjectsManually:[module_num:8|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
    Select the objects to be edited:Microglia
    Name the edited objects:EditedMicrogliaS
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:IBA1
    Allow overlapping objects?:No

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:EditedMicrogliaS
    Name the objects to be identified:MicrogliaProcesses
    Select the method to identify the secondary objects:Propagation
    Select the input image:IBA1
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    Regularization factor:0.0
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredMicrogliaS
    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.2
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:0.2
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:FilteredMicrogliaS, Microglia, MicrogliaProcesses
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:Microglia
    Name the output image:OriginalMicrogliaS_image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:FilteredMicrogliaS
    Name the output image:FilteredMicrogliaS_image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:MicrogliaProcesses
    Name the output image:MicrogliaProcesses_image
    Select the color format:Color
    Select the colormap:Default

Morph:[module_num:14|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
    Select the input image:MicrogliaProcesses_image
    Name the output image:MorphBlue
    Select the operation to perform:skelpe
    Number of times to repeat operation:Forever
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
MeasureObjectSkeleton:[module_num:15|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
    Select the seed objects:FilteredMicrogliaS
    Select the skeletonized image:MorphBlue
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:60
    Export the skeleton graph relationships?:Yes
    Intensity image:IBA1
    File output directory:Default Input Folder sub-folder|
    Vertex file name:VertexFile.csv
    Edge file name:EdgeFile.csv

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Blind
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00F600
    Select objects to display:MicrogliaProcesses

DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:Microglia
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OriginalMicrogliaS_image
    Text color:red
    Name the output image that has the measurements displayed:OriginalMicrogliaS_ID
    Font size (points):14
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:FilteredMicrogliaS
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:FilteredMicrogliaS_image
    Text color:red
    Name the output image that has the measurements displayed:FilteredMicrogliaS_ID
    Font size (points):14
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:19|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
    Display object or image measurements?:Object
    Select the input objects:MicrogliaProcesses
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:MicrogliaProcesses_image
    Text color:red
    Name the output image that has the measurements displayed:MicrogliaProcesses_ID
    Font size (points):14
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:OriginalMicrogliaS_ID
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blind
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:OriginalMicrogliaS_ID
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:FilteredMicrogliaS_ID
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blind
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:FilteredMicrogliaS_ID
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:MicrogliaProcesses_ID
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blind
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:MicrogliaProcesses_ID
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:MorphBlue
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blind
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:MorphBlue
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:BranchpointImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blind
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:BranchpointImage
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:MicrogliaProcesses_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blind
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:MicrogliaProcessesImage
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blind
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:FinalResults
    Overwrite existing files without warning?:No
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